PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  color = $[0, 0, 0]
  expName = midterm_project
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Routine:
        import random

        # 1. 建立網格座標 (避免物件重疊)
        locations = []

        # 增加間隔 (從 80 改成 120-150)
        grid_spacing = 130 # 每個點的間隔增加，讓分布更廣

        for x in range(-5, 6): # 橫向的 11 個點
            for y in range(-3, 4): # 縱向的 7 個點
                #加入一點點隨機偏移 (Jitter)，讓網格看起來不那麼死板
               x_jitter = random.randint(-15, 15)
               y_jitter = random.randint(-15, 15)
               locations.append([(x * grid_spacing) + x_jitter, (y * grid_spacing) + y_jitter])

        # 2. 隨機打亂位置
        random.shuffle(locations)
        # 取出本次需要的物件數量
        pos_list = locations[0:int(set_size)]

        # 3. 建立物件儲存清單
        stims = []

        # 4. 生成物件邏輯
        for i in range(int(set_size)):
            # 決定顏色和形狀
            if i == 0 and target_present == 1:
                # 這是目標物: 紅色正方形
                curr_color = 'red'
                curr_shape = 'rectangle'
            else:
                # 根據實驗條件決定干擾項
                if condition_type == 'feature':
                    # 特徵搜尋: 干擾項全是藍色正方形 (只差顏色)
                    curr_color = 'blue'
                    curr_shape = 'rectangle'
                else:
                    # 聯結搜尋: 一半紅圓，一半藍方 (顏色形狀都干擾)
                    if i % 2 == 0:
                        curr_color = 'red'
                        curr_shape = 'circle'
                    else:
                        curr_color = 'blue'
                        curr_shape = 'rectangle'
            # 5. 建立物件 (如果是圓形就用 Polygon 設定)
            obj_size = 60 # 將原本的 40 提高到 60 或更高

            if curr_shape == 'rectangle':
                el = visual.Rect(win=win, width=obj_size, height=obj_size, fillColor=curr_color, lineColor=curr_color, pos=pos_list[i], units='pix')
            else:
                el = visual.Polygon(win=win, edges=32, radius=obj_size/2, fillColor=curr_color, lineColor=curr_color, pos=pos_list[i], units='pix')
            stims.append(el)
      Each Frame:
        # 每一幀都把清單裡的物件畫出來
        for stim in stims:
            stim.draw()
      End Routine:
        if key_resp.corr:
            total_correct += 1
        total_trials += 1
    KeyboardComponent key_resp
      allowedKeys = 'left', 'right'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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  Routine fixation
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    TextComponent fix_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine feedback
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    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Routine:
        # 判斷對錯
        if prac_key_resp.corr:
            msg = "正確!"
            msg_color = "green"
        else:
            msg = "錯誤!"
            msg_color = "red"

        # 顯示反應時間
        if prac_key_resp.rt:
            rt_ms = round(prac_key_resp.rt * 1000)
            msg += f"\n{rt_ms} ms"
        else:
            msg += "\n太慢了!"
    TextComponent fb_text
      color [set every frame] = $msg_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $msg
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  Routine instr_formal
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # 在正式實驗開始前，將計數器歸零
        total_correct = 0
        total_trials = 0
    TextComponent formal_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        練習結束，即將進入正式實驗

        規則維持不變：
        目標是尋找 「紅色正方形」
        ● 有目標：按 右鍵 (→)
        ● 無目標：按 左鍵 (←)

        注意：
        1. 正式實驗將不再提供對錯回饋。
        2. 螢幕會自動跳轉，請保持注意力集中。
        3. 請盡可能兼顧速度與正確率。

        準備好後，請按「空白鍵」開始正式實驗。
    KeyboardComponent formal_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
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    CodeComponent thanks_code
      Code Type = Auto->JS
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      Begin Routine:
        # 確保沒有除以零 (如果實驗中途結束)
        if total_trials > 0:
            acc_percent = round((total_correct / total_trials) * 100)
            final_msg = f"實驗結束！\n您的正確率為: {acc_percent}%\n\n感謝參與。"
        else:
            final_msg = "實驗結束，謝謝參與。"
      End Routine:
        if key_resp.corr:
            total_correct += 1
        total_trials += 1
    TextComponent thanks_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every frame] = $final_msg
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  Routine instr_practice
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    TextComponent prac_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        【練習階段】

        為了讓您熟悉操作，我們準備了幾題練習題。

        此階段會顯示「正確」或是「錯誤」。

        請在確保正確的前提下，盡可能快地做出反應。



        準備好後，請按下「空白鍵」開始練習。
    KeyboardComponent prac_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent prac_code
      Code Type = Auto->JS
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      Begin Experiment:
        # 初始化計數器（全域變數）
        total_correct = 0
        total_trials = 0
  Routine start
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    TextComponent open_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        歡迎參加本次視覺認知與注意力實驗

        【實驗任務說明】
        在接下來的畫面中，
        會出現許多不同顏色與形狀的圖案。
        您的目標是尋找：「紅色正方形」。

        【按鍵操作指引】
        ● 看到紅色正方形：請按 方向鍵右鍵 (→)
        ● 沒有紅色正方形：請按 方向鍵左鍵 (←)


        按下空白鍵進入下一頁
    KeyboardComponent start_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI
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    TextComponent ITI_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine reset_prac_acc
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    CodeComponent prac_reset
      Code Type = Auto->JS
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      Begin Routine:
        # 這裡只會在一輪練習開始前跑一次
        prac_correct_count = 0
        prac_total_count = 0
        continueRoutine = False # 確保不顯示畫面
  Routine prac_feedback
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    CodeComponent prac_fb_code
      Code Type = Auto->JS
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      Begin Experiment:
        prac_threshold = 0.8  # 設定達標門檻 (例如 80%)
      Begin Routine:
        if prac_total_count > 0:
            # 強制轉換成浮點數 (float) 確保算出 0.85 這種數字
            current_acc = float(prac_correct_count) / float(prac_total_count)
        else:
            current_acc = 0

        # 設定門檻
        threshold = 0.8

        if current_acc >= threshold:
            msg = f"練習完成！\n您的正確率為 {current_acc*100:.1f}%\n即將開始正式實驗。"
            practice_repeat_loop.finished = True
        else:
            msg = f"正確率僅 {current_acc*100:.1f}%\n未達標 ({threshold*100:.0f}%)\n請再練習一次。"
    TextComponent prac_fb_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every frame] = $msg
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  Routine rest_routine
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    CodeComponent rest_code
      Code Type = Auto->JS
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      Begin Routine:
        # 設定每 10 題休息一次
        if (formal_loop.thisN > 0) and (formal_loop.thisN % 10 == 0):
            continueRoutine = True  # 顯示休息畫面
        else:
            continueRoutine = False # 不到題數，直接跳過此 Routine
    TextComponent rest_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        休息時間。
        準備好後請按【空白鍵】繼續實驗。
    KeyboardComponent key_rest
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_prac
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    CodeComponent prac_trial_code
      Code Type = Auto->JS
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      Begin Routine:
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      Each Frame:
        # 每一幀都把清單裡的物件畫出來
        for stim in stims:
            stim.draw()
      End Routine:
        # 累計練習正確率
        if hasattr(prac_key_resp, 'corr') and prac_key_resp.corr:
            prac_correct_count += 1

        prac_total_count += 1
    KeyboardComponent prac_key_resp
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      store = first key
      storeCorrect = True
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Flow
  Routine start
  Routine instr_practice
  LoopInitiator practice_repeat_loop loopType="TrialHandler"
    loopType = random
    nReps = 99
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    Routine reset_prac_acc
    LoopInitiator practice_loop loopType="TrialHandler"
      conditionsFile = practice_cond.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'set_size': 4, 'target_present': 1, 'condition_type': 'feature', 'corr_resp': 'right'},
        {'set_size': 24, 'target_present': 1, 'condition_type': 'feature', 'corr_resp': 'right'},
        {'set_size': 12, 'target_present': 0, 'condition_type': 'feature', 'corr_resp': 'left'},
        {'set_size': 4, 'target_present': 1, 'condition_type': 'conjunction', 'corr_resp': 'right'},
        {'set_size': 24, 'target_present': 1, 'condition_type': 'conjunction', 'corr_resp': 'right'},
        {'set_size': 12, 'target_present': 0, 'condition_type': 'conjunction', 'corr_resp': 'left'}]
      Routine fixation
      Routine trial_prac
      Routine feedback
      Routine ITI
    LoopTerminator practice_loop
    Routine prac_feedback
  LoopTerminator practice_repeat_loop
  Routine instr_formal
  LoopInitiator formal_loop loopType="TrialHandler"
    conditionsFile = formal_cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'set_size': 4, 'target_present': 1, 'condition_type': 'feature', 'corr_resp': 'right'},
      {'set_size': 12, 'target_present': 1, 'condition_type': 'feature', 'corr_resp': 'right'},
      {'set_size': 24, 'target_present': 1, 'condition_type': 'feature', 'corr_resp': 'right'},
      {'set_size': 4, 'target_present': 0, 'condition_type': 'feature', 'corr_resp': 'left'},
      {'set_size': 12, 'target_present': 0, 'condition_type': 'feature', 'corr_resp': 'left'},
      {'set_size': 24, 'target_present': 0, 'condition_type': 'feature', 'corr_resp': 'left'},
      {'set_size': 4, 'target_present': 1, 'condition_type': 'conjunction', 'corr_resp': 'right'},
      {'set_size': 12, 'target_present': 1, 'condition_type': 'conjunction', 'corr_resp': 'right'},
      {'set_size': 24, 'target_present': 1, 'condition_type': 'conjunction', 'corr_resp': 'right'},
      {'set_size': 4, 'target_present': 0, 'condition_type': 'conjunction', 'corr_resp': 'left'},
      {'set_size': 12, 'target_present': 0, 'condition_type': 'conjunction', 'corr_resp': 'left'},
      {'set_size': 24, 'target_present': 0, 'condition_type': 'conjunction', 'corr_resp': 'left'},
      {'set_size': 4, 'target_present': 1, 'condition_type': 'feature', 'corr_resp': 'right'},
      {'set_size': 12, 'target_present': 1, 'condition_type': 'feature', 'corr_resp': 'right'},
      {'set_size': 24, 'target_present': 1, 'condition_type': 'feature', 'corr_resp': 'right'},
      {'set_size': 4, 'target_present': 0, 'condition_type': 'feature', 'corr_resp': 'left'}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
    Routine fixation
    Routine trial
    Routine ITI
    Routine rest_routine
  LoopTerminator formal_loop
  Routine thanks
